<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.4.3">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_01_LM139_S1_Ser_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_02_LM139_S4_EtNH2_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_03_LM139_S13_EthylNH2_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_04_LM139_S7_Ala_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_05_LM139_S10_Ctrl_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_07_LM139_S8_Ala_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_08_LM139_S14_EthylNH2_1uL.mzML</file>
            <file>\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_09_LM139_S5_EtNH2_1uL.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="SPECIFIC_FILES">
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_02_LM139_S4_EtNH2_1uL.mzML">20240510_02_LM139_S4_EtNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_03_LM139_S13_EthylNH2_1uL.mzML">20240510_03_LM139_S13_EthylNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_05_LM139_S10_Ctrl_1uL.mzML">20240510_05_LM139_S10_Ctrl_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_08_LM139_S14_EthylNH2_1uL.mzML">20240510_08_LM139_S14_EthylNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_09_LM139_S5_EtNH2_1uL.mzML">20240510_09_LM139_S5_EtNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_11_LM139_S11_CTRL_1uL.mzML">20240510_11_LM139_S11_CTRL_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_13_LM139_S12_CTRL_1uL.mzML">20240510_13_LM139_S12_CTRL_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_14_LM139_S15_EthylNH2_1uL.mzML">20240510_14_LM139_S15_EthylNH2_1uL.mzML</specific_file>
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        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">6.001</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="SPECIFIC_FILES">
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_02_LM139_S4_EtNH2_1uL.mzML">20240510_02_LM139_S4_EtNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_03_LM139_S13_EthylNH2_1uL.mzML">20240510_03_LM139_S13_EthylNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_05_LM139_S10_Ctrl_1uL.mzML">20240510_05_LM139_S10_Ctrl_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_08_LM139_S14_EthylNH2_1uL.mzML">20240510_08_LM139_S14_EthylNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_09_LM139_S5_EtNH2_1uL.mzML">20240510_09_LM139_S5_EtNH2_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_11_LM139_S11_CTRL_1uL.mzML">20240510_11_LM139_S11_CTRL_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_13_LM139_S12_CTRL_1uL.mzML">20240510_13_LM139_S12_CTRL_1uL.mzML</specific_file>
            <specific_file path="\\pluskalnas.uochb.cas.cz\data\MS_data\Lana_Mutabdzija\20240510_LM139_Callus-isotope-feeding\mzml\20240510_14_LM139_S15_EthylNH2_1uL.mzML">20240510_14_LM139_S15_EthylNH2_1uL.mzML</specific_file>
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        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">2.5</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>2.0</min>
                <max>17.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">5</parameter>
        <parameter name="Minimum intensity for consecutive scans">100000.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.93</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.9</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.03</min>
            <max>0.6</max>
        </parameter>
        <parameter name="Minimum scans (data points)">6</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.03</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>5.0E-4</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.03</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="true">
            <min>272.0</min>
            <max>900.0</max>
        </parameter>
        <parameter name="Retention time" selected="true">
            <min>2.0</min>
            <max>17.0</max>
        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.03</parameter>
        <parameter name="Minimum scans (data points)">5</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.03</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file relative_path="..\LM139-SIRIUS-isotope-grouper-output-NO-ala-NO-ser.mgf">L:\Users\Lana\Isotope feeding\LM139\20250901_Reanalysis-for-the-paper\LM139-SIRIUS-isotope-grouper-output-NO-ala-NO-ser.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">3.0</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
